PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Semantic priming with gender association
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    TextComponent prime
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
      text [set every repeat] = $prime_word
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    ImageComponent target_picture
      image [set every repeat] = $target_image
      size = (0.5, 0.5)
      startVal [time (s)] = 1.5
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    KeyboardComponent key_resp
      allowedKeys = 'f','m'
      forceEndRoutine = True
      startVal [time (s)] = 1.5
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  Routine Instructions
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 00
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      text:
        Welcome to the Experiment!

        In this task, you will see a word followed by a face.
        Your job is to identify the gender of the face as quickly and accurately as possible.

        Press F if the face looks Female

        Press M if the face looks Male

        Please respond as fast as you can without making mistakes.
        Try to focus on the face and ignore the word that appears before it.
        You will begin with a few practice trials.

        Press SPACE to start.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thankyou
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank You for the participation!
Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = cond.csv
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('prime_word', 'Mechanic'), ('prime_gender', 'masculine'), ('target_image', 'm1.jpg'), ('target_gender', 'male')]),
      OrderedDict([('prime_word', 'Mechanic'), ('prime_gender', 'masculine'), ('target_image', 'f1.jpg'), ('target_gender', 'female')]),
      OrderedDict([('prime_word', 'Banker'), ('prime_gender', 'masculine'), ('target_image', 'm2.jpg'), ('target_gender', 'male')]),
      OrderedDict([('prime_word', 'Banker'), ('prime_gender', 'masculine'), ('target_image', 'f2.jpeg'), ('target_gender', 'female')]),
      OrderedDict([('prime_word', 'Engineer'), ('prime_gender', 'masculine'), ('target_image', 'm3.jpg'), ('target_gender', 'male')]),
      OrderedDict([('prime_word', 'Engineer'), ('prime_gender', 'masculine'), ('target_image', 'f3.jpg'), ('target_gender', 'female')]),
      OrderedDict([('prime_word', 'Hunter'), ('prime_gender', 'masculine'), ('target_image', 'm4.jpg'), ('target_gender', 'male')]),
      OrderedDict([('prime_word', 'Hunter'), ('prime_gender', 'masculine'), ('target_image', 'f4.jpg'), ('target_gender', 'female')]),
      OrderedDict([('prime_word', 'Lawyer'), ('prime_gender', 'masculine'), ('target_image', 'm5.jpeg'), ('target_gender', 'male')]),
      OrderedDict([('prime_word', 'Lawyer'), ('prime_gender', 'masculine'), ('target_image', 'f5.jpeg'), ('target_gender', 'female')]),
      OrderedDict([('prime_word', 'Driver'), ('prime_gender', 'masculine'), ('target_image', 'm6.jpg'), ('target_gender', 'male')])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
    Routine trial
  LoopTerminator trials
  Routine Thankyou
