PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 800]
  expName = visual search task
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # decide number of distractors
        if random() > 0.5:
            num_distr = 10
        else:
            num_distr = 5
        thisExp.addData('num_distr', num_distr)

        # create distractor stimuli
        distractors = []
        for i in range(num_distr):
            distr = visual.TextStim(
                win=win,
                name=f'distr_{i}',
                text='L',
                font='Open Sans',
                pos=(random() - 0.5, random() - 0.5),
                wrapWidth=None,
                height=0.1,
                ori=randint(1, 360),
                color='white',
                colorSpace='rgb',
                opacity=None,
                languageStyle='LTR',
                depth=0.0
            )
            distractors.append(distr)

        # draw them
        for distr in distractors:
            distr.setAutoDraw(True)
      End Routine:
        for distr in distractors:
            distr.setAutoDraw(False)
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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    TextComponent Target
      letterHeight = 0.05
      pos [set every repeat] = (random()-0.5,random()-0.5)
      startVal [time (s)] = 0.0
      text = T
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    MouseComponent mouse
      clickable = $Target
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 200
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    Routine trial
  LoopTerminator trials
