PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 800]
  expName = word_priming
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent StudyText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text [set every repeat] = $study_word
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    SliderComponent Studyslider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar", "Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent Testtext
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_words
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    TextboxComponent test_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = click to submit
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    MouseComponent testmouse
      clickable = text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Book1.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('study_word', 'book')]),
      OrderedDict([('study_word', 'cushion')]),
      OrderedDict([('study_word', 'phone')]),
      OrderedDict([('study_word', 'marble')]),
      OrderedDict([('study_word', 'board')]),
      OrderedDict([('study_word', 'laptop')]),
      OrderedDict([('study_word', 'chart')]),
      OrderedDict([('study_word', 't-shirt')]),
      OrderedDict([('study_word', 'mouse')]),
      OrderedDict([('study_word', 'pastry')]),
      OrderedDict([('study_word', 'case')]),
      OrderedDict([('study_word', 'cruise')]),
      OrderedDict([('study_word', 'police')]),
      OrderedDict([('study_word', 'keys')]),
      OrderedDict([('study_word', 'poster')])]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test_words.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('test_words', 'l_pt_p'), ('reference', 'laptop'), ('old_new', 'old ')]),
      OrderedDict([('test_words', '_ha_t'), ('reference', 'chart'), ('old_new', 'old ')]),
      OrderedDict([('test_words', 't_hi_t'), ('reference', 'tshirt'), ('old_new', 'old ')]),
      OrderedDict([('test_words', '_ou_e'), ('reference', 'mouse'), ('old_new', 'old ')]),
      OrderedDict([('test_words', 'p_s_ry'), ('reference', 'pastry'), ('old_new', 'old ')]),
      OrderedDict([('test_words', 'c_s_'), ('reference', 'case'), ('old_new', 'old ')]),
      OrderedDict([('test_words', '_ru_se'), ('reference', 'cruise'), ('old_new', 'old ')]),
      OrderedDict([('test_words', 'P_li_e'), ('reference', 'police'), ('old_new', 'old ')]),
      OrderedDict([('test_words', 'k_y_'), ('reference', 'keys'), ('old_new', 'old ')]),
      OrderedDict([('test_words', 'p_st_r'), ('reference', 'poster'), ('old_new', 'old ')]),
      OrderedDict([('test_words', '_o_rd'), ('reference', 'board'), ('old_new', 'old ')]),
      OrderedDict([('test_words', '_a_bl_'), ('reference', 'marble'), ('old_new', 'old ')]),
      OrderedDict([('test_words', '_ho_e'), ('reference', 'phone'), ('old_new', 'old ')]),
      OrderedDict([('test_words', '_oo_'), ('reference', 'book'), ('old_new', 'old ')]),
      OrderedDict([('test_words', 'c_s_io_'), ('reference', 'cushion'), ('old_new', 'old ')]),
      OrderedDict([('test_words', 'ta_l_'), ('reference', 'table'), ('old_new', 'new')]),
      OrderedDict([('test_words', 'p_nc_l'), ('reference', 'pencil'), ('old_new', 'new')])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
    Routine test
  LoopTerminator trials_2
